PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demoLDTsoloproject
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent stimD
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $target
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    KeyboardComponent response
      allowedKeys = 'a' , 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine fixation
    TextComponent fixationCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions soloproject.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'moonlight', 'prime': 'moon'},
      {'target': 'seabird', 'prime': 'sea'},
      {'target': 'eyeball', 'prime': 'eye'},
      {'target': 'goldfish', 'prime': 'gold'},
      {'target': 'blackboard', 'prime': 'black'},
      {'target': 'telecomes', 'prime': 'tele'},
      {'target': 'gortunes', 'prime': 'gor'},
      {'target': 'sallflower', 'prime': 'sall'},
      {'target': 'brinsuit', 'prime': 'brin'},
      {'target': 'immobility', 'prime': 'im'}]
    Routine trial
    Routine fixation
  LoopTerminator trials
